PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = prof_rating
  keyboardBackend = ioHub
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Routines
  Routine WelcomeScreen
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Test!

        Please press the spacebar to continue
    KeyboardComponent keySpacebar
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ThankYouScreen
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    TextComponent textThankYouMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you for your time!
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  Routine Prof1_taken_prof
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    TextComponent HaveYouTakenThisProf
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Have you taken a class with this Professor?
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    ImageComponent imageProf1
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/image1.png
      pos = (0, 0.15)
      size = (0.5, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageYesButton
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/yes_button.png
      pos = (-0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageNoButton
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/no_button.png
      pos = (0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MouseComponent mouse
      clickable = 'imageYesButton', 'imageNoButton'
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Prof2
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    TextComponent HaveYouTakenThisProf_2
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Have you taken a class with this Professor?
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    ImageComponent imageProf2
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/image2.png
      pos = (0, 0.15)
      size = (0.5, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageYesButton_2
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/yes_button.png
      pos = (-0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageNoButton_2
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/no_button.png
      pos = (0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MouseComponent mouse_2
      clickable = 'imageYesButton', 'imageNoButton'
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Prof3
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    TextComponent HaveYouTakenThisProf_3
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Have you taken a class with this Professor?
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    ImageComponent imageProf3
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/image3.png
      pos = (0, 0.15)
      size = (0.5, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageYesButton_3
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/yes_button.png
      pos = (-0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageNoButton_3
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/no_button.png
      pos = (0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MouseComponent mouse_3
      clickable = 'imageYesButton', 'imageNoButton'
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Prof4
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    TextComponent HaveYouTakenThisProf_4
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Have you taken a class with this Professor?
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    ImageComponent imageProf4
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/image4.png
      pos = (0, 0.15)
      size = (0.5, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageYesButton_4
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/yes_button.png
      pos = (-0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageNoButton_4
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/no_button.png
      pos = (0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MouseComponent mouse_4
      clickable = 'imageYesButton', 'imageNoButton'
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Prof5
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  Routine Prof6
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  Routine Prof7
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  Routine Prof8
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  Routine Prof9
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  Routine Prof10
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  Routine Prof11
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  Routine Prof12
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  Routine Prof13
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  Routine Prof14
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  Routine Prof15
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  Routine Prof16
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  Routine Prof17
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  Routine BlankScreen
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    TextComponent Next_prof
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = The next question is coming up...
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  Routine Prof1_enjoy_class
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    TextComponent DidYouEnjoyThisProf
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Did you enjoy the class with this Professor? If not applicable, do not click on the screen.
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    ImageComponent imageProf1_1
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/image1.png
      pos = (0, 0.15)
      size = (0.5, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageYesButton_18
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/yes_button.png
      pos = (-0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageNoButton_18
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/no_button.png
      pos = (0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MouseComponent mouse_18
      clickable = 'imageYesButton', 'imageNoButton'
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Prof2_enjoy_class
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    TextComponent DidYouEnjoyThisProf_2
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Did you enjoy the class with this Professor? If not applicable, do not click on the screen.
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    ImageComponent imageProf2_2
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/image2.png
      pos = (0, 0.15)
      size = (0.5, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageYesButton_19
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/yes_button.png
      pos = (-0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageNoButton_19
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/no_button.png
      pos = (0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MouseComponent mouse_19
      clickable = 'imageYesButton', 'imageNoButton'
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Prof3_enjoy_class
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    TextComponent DidYouEnjoyThisProf_3
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Did you enjoy the class with this Professor? If not applicable, do not click on the screen.
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    ImageComponent imageProf3_2
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/image3.png
      pos = (0, 0.15)
      size = (0.5, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageYesButton_20
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/yes_button.png
      pos = (-0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageNoButton_20
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/no_button.png
      pos = (0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MouseComponent mouse_20
      clickable = 'imageYesButton', 'imageNoButton'
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Prof4_enjoy_class
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    TextComponent DidYouEnjoyThisProf_4
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Did you enjoy the class with this Professor? If not applicable, do not click on the screen.
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    ImageComponent imageProf4_2
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/image4.png
      pos = (0, 0.15)
      size = (0.5, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageYesButton_21
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/yes_button.png
      pos = (-0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent imageNoButton_21
      image = C:/Users/hiyab/OneDrive/Desktop/Lab Images/no_button.png
      pos = (0.25, -0.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    MouseComponent mouse_21
      clickable = 'imageYesButton', 'imageNoButton'
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Prof5_enjoy_class
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  Routine Prof6_enjoy_class
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  Routine Prof7_enjoy_class
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  Routine Prof8_enjoy_class
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  Routine Prof9_enjoy_class
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  Routine Prof10_enjoy_class
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  Routine Prof11_enjoy_class
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  Routine Prof12_enjoy_class
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  Routine Prof13_enjoy_class
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  Routine Prof14_enjoy_class
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  Routine Prof15_enjoy_class
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  Routine Prof16_enjoy_class
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  Routine Prof17_enjoy_class
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Flow
  Routine WelcomeScreen
  Routine Prof1_taken_prof
  Routine BlankScreen
  Routine Prof1_enjoy_class
  Routine BlankScreen
  Routine Prof2
  Routine BlankScreen
  Routine Prof2_enjoy_class
  Routine BlankScreen
  Routine Prof3
  Routine BlankScreen
  Routine Prof3_enjoy_class
  Routine BlankScreen
  Routine Prof4
  Routine BlankScreen
  Routine Prof4_enjoy_class
  Routine BlankScreen
  Routine Prof5
  Routine BlankScreen
  Routine Prof5_enjoy_class
  Routine BlankScreen
  Routine Prof6
  Routine Prof6_enjoy_class
  Routine BlankScreen
  Routine Prof7
  Routine BlankScreen
  Routine Prof7_enjoy_class
  Routine BlankScreen
  Routine Prof8
  Routine BlankScreen
  Routine Prof8_enjoy_class
  Routine BlankScreen
  Routine Prof9
  Routine BlankScreen
  Routine Prof9_enjoy_class
  Routine BlankScreen
  Routine Prof10
  Routine BlankScreen
  Routine Prof10_enjoy_class
  Routine BlankScreen
  Routine Prof11
  Routine BlankScreen
  Routine Prof11_enjoy_class
  Routine BlankScreen
  Routine Prof12
  Routine BlankScreen
  Routine Prof12_enjoy_class
  Routine BlankScreen
  Routine Prof13
  Routine BlankScreen
  Routine Prof13_enjoy_class
  Routine BlankScreen
  Routine Prof14
  Routine BlankScreen
  Routine Prof14_enjoy_class
  Routine BlankScreen
  Routine Prof15
  Routine BlankScreen
  Routine Prof15_enjoy_class
  Routine BlankScreen
  Routine Prof16
  Routine BlankScreen
  Routine Prof16_enjoy_class
  Routine BlankScreen
  Routine Prof17
  Routine BlankScreen
  Routine Prof17_enjoy_class
  Routine ThankYouScreen
